PsychoPy2experiment version="3.2.4"
Settings
  Experiment info = {'participant': '', 'session': '001'}
  Full-screen window = True
  Monitor = myMacMonitor
  Screen = 1
  Units = deg
  Window size (pixels) = [1280, 800]
  expName = ebbinghaus_mullerlyer_draggable
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Routines
  Routine trial
    PolygonComponent polygon
      fillColor = $[1,1,1]
      nVertices = 120
      shape = rectangle
      size = (5, 6)
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 20
      units = deg
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    MouseComponent mouse
      forceEndRoutineOnPress = never
      saveMouseState = on click
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 20
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Flow
  Routine trial
