PsychoPy2experiment version="3.2.4"
Settings
  Experiment info = {'participant': '', 'session': '001'}
  Full-screen window = False
  Monitor = myMacMonitor
  Screen = 1
  Units = deg
  Window size (pixels) = [640, 400]
  expName = ebbinghaus_mullerlyer_draggable
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Routines
  Routine trial
    PolygonComponent polygon
      fillColor = $[1,1,1]
      nVertices = 120
      shape = regular polygon...
      size [set every frame] = $(target_radius*2, target_radius*2)
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 20
      units = deg
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    MouseComponent mouse
      forceEndRoutineOnPress = never
      saveMouseState = on click
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 20
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    CodeComponent code
      Code Type = Py
      Begin Routine:
        # initialize variable that indicates if participant is in the process
        # of click-dragging
        dragging = False

        # set target radius variable
        target_radius = 2
      Each Frame:
        # fetch current x/y-coordinates of the mouse
        curr_mouse_x, curr_mouse_y = mouse.getPos()

        # calculate current distance between mouse click coordinates and
        # target center
        curr_mouse_dist = sqrt((curr_mouse_x-polygon.pos[0])** 2 + (curr_mouse_y-polygon.pos[1])**2)


        if dragging: # if in the process of click-dragging
            # check if left mouse button is still pressed
            if mouse.getPressed()[0]==0:
                dragging = False
            # calculate the change in distance from center of target
            # to mouse coordinate, previous frame compared to current
            # frame
            delta_mouse_r = curr_mouse_dist - prev_mouse_dist
            # change the target shape's radius by as much as the mouse's
            # distance from the target's center changed, provided the
            # resulting radius isn't too small/large
            pot_new_radius = target_radius + delta_mouse_r
            if pot_new_radius > 0.2 and pot_new_radius < 3:
                target_radius = pot_new_radius

        else: # if not already in process of click-dragging
            # check if left mouse button is pressed
            if mouse.getPressed()[0]==1:
                # fetch x/y-coordinates of the mouse
                mouse_x, mouse_y = mouse.getPos()
                # if distance from perimeter is less than 2 degrees
                if abs(curr_mouse_dist-target_radius) < 2:
                    dragging=True

        # save this frame's mouse coordinates, for comparing with
        # the next frame's coordinates
        prev_mouse_dist = curr_mouse_dist
  Routine code_start
    CodeComponent start_code
      Code Type = Py
      Begin Experiment:
        # initialize previous mouse coordinate variables
        prev_mouse_x, prev_mouse_y = (0, 0)
Flow
  Routine trial
